[General settings]
name: Keithley 3706A Switch and DMM
version: 1.0
#driver_path: Keithley_3706A_switch

#USB0::0x05E6::0x3706::04311335::INSTR

[Model and options]
model_str_1: 3706A
check_model: False
model_id_1: MODEL 3706A



[VISA settings]
use_visa = True
query_instr_errors: False
error_bit_mask: 255
error_cmd: STAT:QUE:NEXT?
init: reset() channel.close('1911:1916,2911:2916')
str_true: 1
str_false: 0
timeout: 100

[I plus]
datatype: COMBO
label: Iplus (#3)
def_value: 1
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
combo_def_17: 17
combo_def_18: 18
combo_def_19: 19
combo_def_20: 20
combo_def_21: 21
combo_def_22: 22
combo_def_23: 23
combo_def_24: 24
section: Switch
set_cmd: channel.reset('1301:1316') channel.reset('2301:2316') channel.close('<*>')
cmd_def_1: 1301
cmd_def_2: 1302
cmd_def_3: 1303
cmd_def_4: 1304
cmd_def_5: 1305
cmd_def_6: 1306
cmd_def_7: 1307
cmd_def_8: 1308
cmd_def_9: 1309
cmd_def_10: 1310
cmd_def_11: 1311
cmd_def_12: 1312
cmd_def_13: 2301
cmd_def_14: 2302
cmd_def_15: 2303
cmd_def_16: 2304
cmd_def_17: 2305
cmd_def_18: 2306
cmd_def_19: 2307
cmd_def_20: 2308
cmd_def_21: 2309
cmd_def_22: 2310
cmd_def_23: 2311
cmd_def_24: 2312

[I minus]
datatype: COMBO
label: Iminus (#4)
def_value: 1
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
combo_def_17: 17
combo_def_18: 18
combo_def_19: 19
combo_def_20: 20
combo_def_21: 21
combo_def_22: 22
combo_def_23: 23
combo_def_24: 24
section: Switch
set_cmd: channel.reset('1401:1416') channel.reset('2401:2416') channel.close('<*>')
get_cmd: OUTP?
cmd_def_1: 1401
cmd_def_2: 1402
cmd_def_3: 1403
cmd_def_4: 1404
cmd_def_5: 1405
cmd_def_6: 1406
cmd_def_7: 1407
cmd_def_8: 1408
cmd_def_9: 1409
cmd_def_10: 1410
cmd_def_11: 1411
cmd_def_12: 1412
cmd_def_13: 2401
cmd_def_14: 2402
cmd_def_15: 2403
cmd_def_16: 2404
cmd_def_17: 2405
cmd_def_18: 2406
cmd_def_19: 2407
cmd_def_20: 2408
cmd_def_21: 2409
cmd_def_22: 2410
cmd_def_23: 2411
cmd_def_24: 2412

[V plus]
datatype: COMBO
label: Vplus (#5)
def_value: 1
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
combo_def_17: 17
combo_def_18: 18
combo_def_19: 19
combo_def_20: 20
combo_def_21: 21
combo_def_22: 22
combo_def_23: 23
combo_def_24: 24
section: Switch
set_cmd: channel.reset('1501:1516') channel.reset('2501:2516') channel.close('<*>')
get_cmd: OUTP?
cmd_def_1: 1501
cmd_def_2: 1502
cmd_def_3: 1503
cmd_def_4: 1504
cmd_def_5: 1505
cmd_def_6: 1506
cmd_def_7: 1507
cmd_def_8: 1508
cmd_def_9: 1509
cmd_def_10: 1510
cmd_def_11: 1511
cmd_def_12: 1512
cmd_def_13: 2501
cmd_def_14: 2502
cmd_def_15: 2503
cmd_def_16: 2504
cmd_def_17: 2505
cmd_def_18: 2506
cmd_def_19: 2507
cmd_def_20: 2508
cmd_def_21: 2509
cmd_def_22: 2510
cmd_def_23: 2511
cmd_def_24: 2512


[V minus]
datatype: COMBO
label: Vminus (#6)
def_value: 1
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
combo_def_17: 17
combo_def_18: 18
combo_def_19: 19
combo_def_20: 20
combo_def_21: 21
combo_def_22: 22
combo_def_23: 23
combo_def_24: 24
section: Switch
set_cmd: channel.reset('1601:1616') channel.reset('2601:2616') channel.close('<*>')
get_cmd: OUTP?
cmd_def_1: 1601
cmd_def_2: 1602
cmd_def_3: 1603
cmd_def_4: 1604
cmd_def_5: 1605
cmd_def_6: 1606
cmd_def_7: 1607
cmd_def_8: 1608
cmd_def_9: 1609
cmd_def_10: 1610
cmd_def_11: 1611
cmd_def_12: 1612
cmd_def_13: 2601
cmd_def_14: 2602
cmd_def_15: 2603
cmd_def_16: 2604
cmd_def_17: 2605
cmd_def_18: 2606
cmd_def_19: 2607
cmd_def_20: 2608
cmd_def_21: 2609
cmd_def_22: 2610
cmd_def_23: 2611
cmd_def_24: 2612


